PsychoPy2experiment version="1.83.03"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = test2
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text [set every frame] = $displaystring
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        import psychopy
        displaystring= ""
        # -*- coding: utf-8 -*-
        chars = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z']
      Each Frame:
        response1 = event.getKeys()
        if response1:
            print response1
            # If backspace, delete last character
            if response1[0] == 'backspace':
                displaystring = displaystring[:-1]
            # Insert space
            elif response1[0] == 'space':
                displaystring = displaystring + ' '
            elif response1[0] == 'return':
                continueRoutine = False
            # Else if a letter, append to text:
            elif response1[0] in chars:
                displaystring = displaystring + response1[0]
Flow
  Routine trial
